CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:6
HasImagePlaneDetails:False

LoadData:[module_num:1|svn_version:'Unknown'|variable_revision_number:6|show_window:False|notes:['Module 3 output can be read by module 4 (this one).']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Input data file location:Elsewhere...|Z:\\lab_winter\\users\\ang\\cell_painting_assay_development\\AN-B-174_RKO_CRBN_morpho_control\\output\\module_3_output
    Name of the file:module_3_metadata.csv
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
    Rows to process:1,5
    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|svn_version:'Unknown'|variable_revision_number:5|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

GrayToColor:[module_num:3|svn_version:'Unknown'|variable_revision_number:4|show_window:False|notes:['The color assignment here to the DNA and AGP channels affects the segmentation done in module_5b.sh, so make sure that the color assignments in module_5b.sh and here match up.']|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select a color scheme:Composite
    Rescale intensity:Yes
    Select the image to be colored red:Leave this black
    Select the image to be colored green:Leave this black
    Select the image to be colored blue:Leave this black
    Name the output image:Composite_DNA_AGP
    Relative weight for the red image:1.0
    Relative weight for the green image:1.0
    Relative weight for the blue image:1.0
    Select the image to be colored cyan:Leave this black
    Select the image to be colored magenta:Leave this black
    Select the image to be colored yellow:Leave this black
    Select the image that determines brightness:Leave this black
    Relative weight for the cyan image:1.0
    Relative weight for the magenta image:1.0
    Relative weight for the yellow image:1.0
    Relative weight for the brightness image:1.0
    Hidden:2
    Image name:DNA
    Color:blue
    Weight:1.0
    Image name:AGP
    Color:#00ff00
    Weight:1.0

RescaleIntensity:[module_num:4|svn_version:'Unknown'|variable_revision_number:3|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the input image:Composite_DNA_AGP
    Name the output image:Rescale_DNA_AGP
    Rescaling method:Stretch each image to use the full intensity range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
    Lower intensity limit for the input image:0.0
    Upper intensity limit for the input image:1.0
    Intensity range for the input image:0.0,1.0
    Intensity range for the output image:0.0,1.0
    Select image to match in maximum intensity:None
    Divisor value:1.0
    Divisor measurement:None

SaveImages:[module_num:5|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:DNA
    Select method for constructing file names:Single name
    Select image name for file prefix:None
    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>__dna
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\lab_winter\\users\\ang\\cpa_cluster_test\\output\\test_module_4b_output\\merged_image
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes

SaveImages:[module_num:6|svn_version:'Unknown'|variable_revision_number:16|show_window:False|notes:[]|batch_state:array([], dtype=uint8)|enabled:True|wants_pause:False]
    Select the type of image to save:Image
    Select the image to save:Composite_DNA_AGP
    Select method for constructing file names:Single name
    Select image name for file prefix:None
    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>__dna_agp
    Number of digits:4
    Append a suffix to the image file name?:No
    Text to append to the image name:
    Saved file format:tiff
    Output file location:Default Output Folder|Z:\\lab_winter\\users\\ang\\cpa_cluster_test\\output\\test_module_4b_output\\merged_image
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
    Base image folder:Elsewhere...|
    How to save the series:T (Time)
    Save with lossless compression?:Yes
