CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:421
GitHash:
ModuleCount:33
HasImagePlaneDetails:False

LoadData:[module_num:1|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notes:['Module 6 output can be read by module 7 (this one).']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
    Input data file location:Elsewhere...|
    Name of the file:
    Load images based on this data?:Yes
    Base image location:None|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Plate,Well,Site
    Rescale intensities?:Yes

CorrectIlluminationApply:[module_num:2|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumMito
    Select how the illumination function is applied:Divide
    Select the input image:OrigBrightfield
    Name the output image:BrightField
    Select the illumination function:IllumBrightfield
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

MeasureImageQuality:[module_num:3|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notes:['General check of image quality of all raw images prior to illumination correction. Keep in mind that the data extracted here could be useful for deciding on the settings of subsequent CellProfiler modules. If the feature extraction looks bad, these data would be helpful too in, perhaps, adjusting the settings for the module.', '', '[21 Jan 2022: The test run indicates that the RKO images have low focus scores which indicates blurriness.]']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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:OrigAGP, OrigBrightfield, OrigDNA, OrigER, OrigMito
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
ConvertImageToObjects:[module_num:4|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
    Select the input image:NucleiMask
    Name the output object:UnfilteredNuclei
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

ConvertImageToObjects:[module_num:5|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
    Select the input image:CellMask
    Name the output object:UnfilteredCells
    Convert to boolean image:No
    Preserve original labels:No
    Background label:0
    Connectivity:0

RelateObjects:[module_num:6|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
    Parent objects:UnfilteredNuclei
    Child objects:UnfilteredCells
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:RelatedUnfilteredCells
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
FilterObjects:[module_num:7|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
    Select the objects to filter:UnfilteredNuclei
    Name the output objects:Nuclei
    Select the filtering mode:Image or mask border
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    Additional object count:1
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    Keep removed objects as a seperate set?:No
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    Select additional object to relabel:RelatedUnfilteredCells
    Name the relabeled objects:Cells

IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:9|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notes:['Measures the colocalisation between channels and with respect to objects. Based on the v3 of the publicly available JUMP consortium pipeline, Coster should either be set to faster or off, but the person who was working on it had yet to check with Beth Cimini.']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
    Select images to measure:AGP, DNA, ER, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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
    Select images to measure:AGP, DNA, ER, Mito
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.5
    Subsampling factor for background reduction:0.5
    Radius of structuring element:10
    Range of the granular spectrum:16

MeasureObjectIntensity:[module_num:11|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
    Select images to measure:AGP, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectNeighbors:[module_num:12|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notes:["I'm not too sure if I would need this information on neighbours of the cell. Might as well keep it in anyway."]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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Within a specified distance
    Neighbor distance:5
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:13|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
    Select objects to measure:Nuclei
    Select neighboring objects to measure:Nuclei
    Method to determine neighbors:Within a specified distance
    Neighbor distance:1
    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectNeighbors:[module_num:14|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
MeasureObjectIntensityDistribution:[module_num:15|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
    Select images to measure:AGP, DNA, ER, Mito
    Hidden:3
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Nuclei
    Object to use as center?:These objects
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    Select objects to measure:Cytoplasm
    Object to use as center?:These objects
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectSizeShape:[module_num:16|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:No

MeasureTexture:[module_num:17|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notes:['Measuring the textures of the various organelles/compartments stained in the whole cell, cytoplasm and nucleus with three different scales. Smaller scales would be detecteding local texture while larger scales would detect more global texture.']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
    Select images to measure:AGP, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:3
    Texture scale to measure:5
    Texture scale to measure:10

EnhanceOrSuppressFeatures:[module_num:18|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notes:['1/5 additional modules for special mitochondrial features', 'Enhances the neurite structure in the Mito image.']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
    Select the input image:Mito
    Name the output image:mito_tubeness
    Select the operation:Enhance
    Feature size:10
    Feature type:Neurites
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    Smoothing scale:1.0
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    Enhancement method:Tubeness
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    Rescale result image:Yes

Threshold:[module_num:19|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notes:['2/5 additional modules for special mitochondrial features', 'Thresholds the enhanced mito image']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
    Select the input image:mito_tubeness
    Name the output image:mito_bw
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Log transform before thresholding?:No
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
MorphologicalSkeleton:[module_num:20|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notes:['3/5 additional modules for special mitochondrial features', 'Creates a skeleton from the thresholded mito image']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
    Select the input image:mito_bw
    Name the output image:mito_skel

MeasureObjectSkeleton:[module_num:21|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notes:['4/5 additional modules for special mitochondrial features', 'Measures the skeletonized mito image']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
    Select the seed objects:Nuclei
    Select the skeletonized image:mito_skel
    Retain the branchpoint image?:No
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    Fill small holes?:Yes
    Maximum hole size:10
    Export the skeleton graph relationships?:No
    Intensity image:None
    File output directory:Default Output Folder|
    Vertex file name:vertices.csv
    Edge file name:edges.csv

MeasureObjectIntensityDistribution:[module_num:22|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notes:['5/5 additional modules for special mitochondrial features', 'Measures the radial distribution of the enhanced mito image.', '', "I am not sure why there's two different number of bins and how the maximum radius would affect the resulting measurement."]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
    Select images to measure:mito_tubeness
    Hidden:2
    Hidden:2
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Select objects to measure:Cytoplasm
    Object to use as center?:Centers of other objects
    Select objects to use as centers:Nuclei
    Scale the bins?:Yes
    Number of bins:16
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    Scale the bins?:No
    Number of bins:20
    Maximum radius:100

MaskImage:[module_num:23|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:DNA
    Name the output image:DNA_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:UnfilteredCells
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    Invert the mask?:Yes

MaskImage:[module_num:24|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:AGP
    Name the output image:AGP_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:UnfilteredCells
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    Invert the mask?:Yes

MaskImage:[module_num:25|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:ER
    Name the output image:ER_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:UnfilteredCells
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    Invert the mask?:Yes

MaskImage:[module_num:26|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notes:['Remove signal in the image that is in cells (including cells that touch the well edge) so that only background remains in the image.', 'Used downstream to measure the intensity of the image without cells present.']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
    Select the input image:Mito
    Name the output image:Mito_BackgroundOnly
    Use objects or an image as a mask?:Objects
    Select object for mask:UnfilteredCells
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    Invert the mask?:Yes

MeasureImageIntensity:[module_num:27|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notes:['Measures the intensity of the whole image (AGP, BFHigh, BFLow, Brightfield, DNA, ER, Mito, RNA) as well as the intensity of the image only in regions without cells (* _BackgroundOnly).', '', "I don't actually know how this image is used subsequently in the analysis actually. /.\\ XD"]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
    Select images to measure:AGP, AGP_BackgroundOnly, DNA, DNA_BackgroundOnly, ER, ER_BackgroundOnly, Mito, Mito_BackgroundOnly
    Measure the intensity only from areas enclosed by objects?:No
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    Calculate custom percentiles:No
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
OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Nuclei

OverlayOutlines:[module_num:29|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Grayscale
    Select method to determine brightness of outlines:Max of image
    How to outline:Inner
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    Select objects to display:Cells

SaveImages:[module_num:30|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notes:["Saves the nuclei outlines. I do not know what this'll be used for, but I've kept it in following the JUMP consortium pipeline. Perhaps for visualisation purposes to check segmentation, co-localisation and whatnot."]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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>__nuclei_outlines
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    Saved file format:png
    Output file location:Default Output Folder|Desktop\\gw015_cpa_dev\\preincorporation_output\\module_7b_output\\nuclei_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

SaveImages:[module_num:31|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notes:["Saves the cell outlines. I do not know what this'll be used for, but I've kept it in following the JUMP consortium pipeline. Perhaps for visualisation purposes to check segmentation, co-localisation and whatnot."]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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Plate>_\g<Well>_s\g<Site>__cell_outlines
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    Saved file format:png
    Output file location:Default Output Folder|Desktop\\gw015_cpa_dev\\preincorporation_output\\module_7b_output\\cell_outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:Yes

ExportToDatabase:[module_num:32|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enabled:False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
    Database type:SQLite
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    Add a prefix to table names?:Yes
    Table prefix:MyExpt_
    Output file location:Default Input Folder sub-folder|Desktop\\gw015_cpa_dev\\preincorporation_output\\module_4a_output
    Create a CellProfiler Analyst properties file?:No
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    Name the SQLite database file:cell_paint_trial.db
    Calculate the per-image mean values of object measurements?:Yes
    Calculate the per-image median values of object measurements?:No
    Calculate the per-image standard deviation values of object measurements?:No
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    Export measurements for all objects to the database?:All
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    Maximum # of characters in a column name:64
    Create one table per object, a single object table or a single object view?:Single object table
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    Write image thumbnails directly to the database?:No
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    Experiment name:MyExpt
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    Export object relationships?:Yes
    Overwrite without warning?:Never
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    Create a CellProfiler Analyst workspace file?:No
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
ExportToSpreadsheet:[module_num:33|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|Desktop\\gw015_cpa_dev\\preincorporation_output\\module_7b_output
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
    Press button to select measurements:Cells|Intensity_StdIntensityEdge_AGP,Cells|Intensity_StdIntensityEdge_ER,Cells|Intensity_StdIntensityEdge_Mito,Cells|Intensity_StdIntensityEdge_DNA,Cells|Intensity_MinIntensity_ER,Cells|Intensity_MinIntensity_Mito,Cells|Intensity_MinIntensity_AGP,Cells|Intensity_MinIntensity_DNA,Cells|Intensity_LowerQuartileIntensity_DNA,Cells|Intensity_LowerQuartileIntensity_Mito,Cells|Intensity_LowerQuartileIntensity_ER,Cells|Intensity_LowerQuartileIntensity_AGP,Cells|Intensity_MedianIntensity_ER,Cells|Intensity_MedianIntensity_AGP,Cells|Intensity_MedianIntensity_Mito,Cells|Intensity_MedianIntensity_DNA,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:Yes
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
